PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'participant': u'', u'session': u'001', u'mriMode': u'Off'}
  expName = context
  Units = use prefs
  Screen = 1
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Routines
  Routine feedback
  Routine instr
    CodeComponent params
      Begin Experiment:
        # some hardcoded experiment params
        #
        isBehavioral = True # are we doing a behavioral pilot? changes button press instructions
        isPractice = False # only a practice run -- uses diff foods and restaurants
    CodeComponent instrCode
      Begin Experiment:
        instruction ='''Imagine that you are a health inspector trying to determine the cause of illness in different restaurants.''' \
        + ''' On each trial you will see the name of the restaurant and a particular food.''' \
        + ''' Your job is to predict whether a customer will get sick from eating the food.''' \
        + ''' The outcome may or may not depend on the particular restaurant the customer is in (you have to figure that out).''' \
        + ''' In some cases you will make predictions about the same food in different restaurants.

        The experiment consists of 9 rounds. In each round, you will be presented with a different set of restaurants and foods.''' \
        + ''' There will be a short pause between rounds.

        Press any button to begin the first round.
        '''
    TextComponent instrText
      wrapWidth = 1.5
      color = black
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text:
        $instruction
    KeyboardComponent startExpResp
      stopVal [time (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0
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  Routine new_run
    CodeComponent runInstrCode
      Begin Experiment:
        # Put 'em here for good indentation
        #
        if isBehavioral:
            sickPressInstr = "the left arrow key (<-)"
            notsickPressInstr = "the right arrow key (->)"
        else:
            sickPressInstr = "with your index finger"
            notsickPressInstr = "with your middle finger"

        runInstructionsRound1 = '''You will make 24 predictions. After each prediction (except the last 4), you will receive feedback about whether or not the customer got sick.

        Press %s if you believe the customer will get sick from eating the food.

        Press %s if you believe the customer will NOT get sick.

        You will have 3 seconds to press on each trial.

        Press any button to begin the first trial.''' % (sickPressInstr, notsickPressInstr)

        runInstructionsOtherRounds = '''You are about to begin a new round with a new set of restaurants and foods.

        Press any button to begin the first trial.'''
      Begin Routine:
        if runs.thisN == 0: # first round
            runInstr.setText(runInstructionsRound1)
        else: # other rounds
            runInstr.setText(runInstructionsOtherRounds)
    TextComponent runInstr
      wrapWidth = 1.5
      color = black
      text = this value is set in the code depending on the run number
      stopVal [duration (s)] = 60.0
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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    CodeComponent getRestaurants
      Begin Routine:
        # Parse the comma-separated list of restaurant names
        #
        restaurants = [r.strip() for r in restaurantNames.split(',')]
        assert len(restaurants) == 3, "There should be 3 comma-separated restaurant names per run; found " + str(len(restaurants))

        # Use a separate, hardcoded set of restaurants and foods if it's just a practice run
        #
        if isPractice:
            restaurants = ['Seven Hills', 'Blue Bottle Cafe', 'Restaurant Gary Danko']
            foodFilesPrefix = 'practice_food'
    CodeComponent shuffleContextRoles
      Begin Routine:
        # Random shuffle the context roles so they're independent from the
        # restaurants / foods.
        #
        # Notice that we ONLY DO THIS ONCE at the beginning
        #
        try:
            assert contextRolesWereShuffled
        except NameError:
            # hack to make sure this happens only once
            # we can't put in Begin Experiment b/c runs is not initialized there
            #
            contextRoles = [run['contextRole'] for run in runs.trialList]
            print 'original contextRoles = ', contextRoles
            shuffle(contextRoles)
            print 'Shuffled context roles = ', contextRoles
            # set the flag so we don't run this code again
            #
            contextRolesWereShuffled = True

        # very important to set it here so
        # 1) it gets used to initialize the trial loop, and
        # 2) it gets written out to the data file
        #
        thisRun.contextRole = contextRoles[runs.thisN]
    CodeComponent shuffleFoodsAndRestaurants
      Begin Routine:
        # randomize foods & restaurants within each run
        # note that we DO THIS BEFORE EVERY RUN
        #
        cuesReshuffled = range(0, 3)
        contextsReshuffled = range(0, 3)

        shuffle(cuesReshuffled)
        shuffle(contextsReshuffled)

        print 'Shuffled cues: ', cuesReshuffled
        print 'Shuffled contexts: ', contextsReshuffled
    KeyboardComponent startRunResp
      stopVal [duration (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0
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  Routine trial
    CodeComponent saveToStreamingFile
      Begin Experiment:
        # psychopy only writes the data at the very end
        # we want data with intermediate results
        # so we have this
        #

        streamingFilename = thisExp.dataFileName + '.wtf'
        streamingFile = open(streamingFilename, 'a')
        streamingDelim = ','

        # get names of data columns
        #
        def getExpDataNames():
            names = thisExp._getAllParamNames()
            names.extend(thisExp.dataNames)
            # names from the extraInfo dictionary
            names.extend(thisExp._getExtraInfo()[0])
            return names

        # write a header lines
        #
        def writeHeadersToStreamingFile():
            for heading in getExpDataNames():
                streamingFile.write(u'%s%s' % (heading, streamingDelim))
            streamingFile.write('\n')
            streamingFile.flush()

        def flushEntryToStreamingFile(entry):
            for name in getExpDataNames():
                entry.keys()
                if name in entry.keys():
                    ename = unicode(entry[name])
                    if ',' in ename or '\n' in ename:
                        fmt = u'"%s"%s'
                    else:
                        fmt = u'%s%s'
                    streamingFile.write(fmt % (entry[name], streamingDelim))
                else:
                    streamingFile.write(streamingDelim)
            streamingFile.write('\n')
            streamingFile.flush()

        flushedFirstRun = False

        # write last entry
        #
        def flushToStreamingFile():
            global flushedFirstRun

            # End Routine is called before thisExp.nextEntry()...
            # so we must do this manually
            # copy-pasted from def nextEntry() in data.py from the psychopy repo
            #
            entry = thisExp.thisEntry
            # fetch data from each (potentially-nested) loop
            for thisLoop in thisExp.loopsUnfinished:
                names, vals = thisExp._getLoopInfo(thisLoop)
                for n, name in enumerate(names):
                    entry[name] = vals[n]
            # add the extraInfo dict to the data
            if type(thisExp.extraInfo) == dict:
                entry.update(thisExp.extraInfo)

            # don't write anything during the initial run
            # that's b/c the number of columns can change
            #
            if runs.thisN == 0:
                return

            # if we're after the initial run and haven't flushed it yet,
            # do so.
            #
            if runs.thisN == 1 and not flushedFirstRun:
                writeHeadersToStreamingFiles()
                for pastEntry in thisExp.entries:
                    flushEntryToStreamingFile(pastEntry)
                flushedFirstRun = True

            # actually write the last entry
            #
            flushEntryToStreamingFile(entry)
      End Routine:
        flushToStreamingFile()
      End Experiment:
        streamingFile.close()
    CodeComponent logCueAndContext
      Begin Experiment:
        def addExtraData():
            thisExp.addData('fmriTime', fmriClock.getTime())
            thisExp.addData('contextsReshuffled', ','.join([str(x) for x in contextsReshuffled]))
            thisExp.addData('contextId', contextId)
            thisExp.addData('restaurant', restaurants[contextsReshuffled[contextId]])
            thisExp.addData('cuesReshuffled', ','.join([str(x) for x in cuesReshuffled]))
            thisExp.addData('cueId', cueId)
            thisExp.addData('food', foodFilesPrefix + str(cuesReshuffled[cueId]))
      Begin Routine:
        thisExp.addData('trialOrTest', 'trial')
        addExtraData()
    CodeComponent sanityChecks
      Begin Routine:
        assert contextRolesWereShuffled
    StaticComponent ITI
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
    TextComponent trialInstrText
      wrapWidth = 20
      color = black
      text = Predict whether the customer will get sick from this food.
      stopVal [duration (s)] = 4.0
      pos = [0, 0.8]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent restaurantText
      color = purple
      text [set every repeat] = $restaurants[$contextsReshuffled[$contextId]]
      stopVal [duration (s)] = 4.0
      pos = [0, +0.35]
      startVal [time (s)] = 1
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg
      stopVal [duration (s)] = 4.0
      pos = [0, 0.0]
      startVal [time (s)] = 1
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cuesReshuffled[$cueId]) + '.png')
      size = [0.5, 0.5]
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    TextComponent fixationJitterText
      color = black
      text = +
      stopVal [duration (s)] = $jitterTime
      durationEstim = 1
      startVal [time (s)] = 5.0
      letterHeight = 0.1
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    ImageComponent sickImg
      stopVal [duration (s)] = 4.0
      pos = [-0.5, -0.6]
      startVal [time (s)] = 1
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg
      stopVal [duration (s)] = 4.0
      pos = [+0.5, -0.6]
      startVal [time (s)] = 1.0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    KeyboardComponent responseKey
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 1
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    TextComponent fixationITIText
      color = black
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent Jitter
      stopVal [duration (s)] = $jitterTime
      durationEstim = 1
      startVal [time (s)] = 5.0
    TextComponent sickHighlight
      text = _
      stopVal [duration (s)] = 4.0
      pos = [-0.5, -0.35]
      startVal [time (s)] = 1
      letterHeight = 1.0
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    TextComponent notsickHighlight
      text = _
      stopVal [duration (s)] = 4.0
      pos = [0.5, -0.35]
      startVal [time (s)] = 1
      letterHeight = 1
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    CodeComponent highlightChoice
      Begin Routine:
        # don't highlight anything initially
        #
        sickHighlight.setOpacity(0)
        notsickHighlight.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
      Each Frame:
        # highlight subject's response
        #
        if responseKey.keys:
            if responseKey.keys == 'left': # sick
                sickHighlight.opacity = 1
                notsickHighlight.opacity = 0
            elif responseKey.keys == 'right': # not sick
                sickHighlight.opacity = 0
                notsickHighlight.opacity = 1
            else:
                assert False, 'Can only have one response, left or right'
        # hack to re-render the text with new opacity
        sickHighlight.setText(sickHighlight.text)
        notsickHighlight.setText(notsickHighlight.text)
    TextComponent correctText
      color = blue
      text = CORRECT
      stopVal [duration (s)] = 1.0
      pos = [0, -0.4]
      startVal [time (s)] = 4.0
      font = Arial Bold
      letterHeight = 0.1
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    TextComponent wrongText
      color = red
      text = WRONG
      stopVal [duration (s)] = 1.0
      pos = [0, -0.4]
      startVal [time (s)] = 4.0
      font = Arial Bold
      letterHeight = 0.1
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    TextComponent timeoutText
      color = black
      text = TIMEOUT
      stopVal [duration (s)] = 1.0
      pos = [0, -0.4]
      startVal [time (s)] = 4
      font = Arial Bold
      letterHeight = 0.1
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    TextComponent gotSickText
      color = black
      text = The customer got sick!
      stopVal [duration (s)] = 1.0
      pos = [0, -0.6]
      startVal [time (s)] = 4
      letterHeight = 0.075
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    TextComponent didntGetSickText
      color = black
      text = The customer didn't get sick!
      stopVal [duration (s)] = 1.0
      pos = [0, -0.6]
      startVal [time (s)] = 4.0
      letterHeight = 0.075
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    CodeComponent showFeedback
      Begin Routine:
        # clear the feedback
        isFeedbackShown = False
        correctText.setOpacity(0)
        wrongText.setOpacity(0)
        timeoutText.setOpacity(0)
        gotSickText.setOpacity(0)
        didntGetSickText.setOpacity(0)
        # hack to re-render the texts with new opacity
        correctText.setText(correctText.text)
        wrongText.setText(wrongText.text)
        timeoutText.setText(timeoutText.text)
        gotSickText.setText(gotSickText.text)
        didntGetSickText.setText(didntGetSickText.text)
      Each Frame:
        # show user some feedback
        #
        if t >= 4.0 and not isFeedbackShown: # TODO don't hardcode
            isFeedbackShown = True
            if not responseKey.keys: # no response was made
                timeoutText.setOpacity(1)
                timeoutText.setText(timeoutText.text)
            else: # response was made
                if responseKey.corr == 1:
                    correctText.setOpacity(1)
                    wrongText.setOpacity(0)
                elif responseKey.corr == 0:
                    correctText.setOpacity(0)
                    wrongText.setOpacity(1)
                else:
                    print responseKey.corr
                    assert False, "responseKey.corr = 0 or 1"

                if sick == 'Yes':
                    gotSickText.setOpacity(1)
                    didntGetSickText.setOpacity(0)
                elif sick == 'No':
                    gotSickText.setOpacity(0)
                    didntGetSickText.setOpacity(1)
                else:
                    print sick
                    assert False, "sick can only be Yes or No"

                # hack to redraw the texts with new opacity
                correctText.setText(correctText.text)
                wrongText.setText(wrongText.text)
                gotSickText.setText(gotSickText.text)
                didntGetSickText.setText(didntGetSickText.text)
    CodeComponent jitterCode
      Begin Routine:
        # uniform 0-2 seconds for each trial
        #
        jitterTime = random() * 2
    CodeComponent timeLoggingCode
      Begin Experiment:
        import time
        expInfo['expStartWallTime'] = time.ctime()
      Begin Routine:
        trials.addData('trialStartWallTime', time.ctime())
      End Routine:
        trials.addData('trialEndWallTime', time.ctime())
  Routine test_2
    CodeComponent saveToStreamingFile_2
      End Routine:
        flushToStreamingFile()
    CodeComponent logCueAndContext_2
      Begin Routine:
        thisExp.addData('trialOrTest', 'test')
        addExtraData()
    StaticComponent ITI_2
      stopVal [duration (s)] = 1
      startVal [time (s)] = 0
    TextComponent trialInstrText_2
      wrapWidth = 20
      color = black
      text = Predict whether the customer will get sick from this food.
      stopVal [duration (s)] = 3.0
      pos = [0, 0.8]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent restaurantText_2
      color = purple
      text [set every repeat] = $restaurants[$contextsReshuffled[$contextId]]
      stopVal [duration (s)] = 3.0
      pos = [0, +0.35]
      startVal [time (s)] = 1
      font = Arial Bold
      letterHeight = 0.1
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    ImageComponent foodImg_2
      stopVal [duration (s)] = 3.0
      pos = [0, 0.0]
      startVal [time (s)] = 1
      image [set every repeat] = os.path.join('foods', $foodFilesPrefix + str($cuesReshuffled[$cueId]) + '.png')
      size = [0.5, 0.5]
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    TextComponent fixationJitterText_2
      color = black
      text = +
      stopVal [duration (s)] = $jitterTime
      durationEstim = 1
      startVal [time (s)] = 4.0
      letterHeight = 0.1
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    KeyboardComponent responseKey_2
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      startVal [time (s)] = 1
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    ImageComponent sickImg_2
      stopVal [duration (s)] = 3.0
      pos = [-0.5, -0.6]
      startVal [time (s)] = 1
      image = $os.path.join('images', 'sick.png')
      size = [0.3, 0.45]
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    ImageComponent notsickImg_2
      stopVal [duration (s)] = 3
      pos = [+0.5, -0.6]
      startVal [time (s)] = 1.0
      image = $os.path.join('images', 'smiley.png')
      size = [0.3, 0.45]
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    TextComponent fixationITIText_2
      color = black
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent Jitter_2
      stopVal [duration (s)] = $jitterTime
      durationEstim = 1
      startVal [time (s)] = 4.0
    TextComponent sickHighlight_2
      text = _
      stopVal [duration (s)] = 3
      pos = [-0.5, -0.35]
      startVal [time (s)] = 1
      letterHeight = 1.0
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    TextComponent notsickHighlight_2
      text = _
      stopVal [duration (s)] = 3
      pos = [0.5, -0.35]
      startVal [time (s)] = 1
      letterHeight = 1
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    CodeComponent highlightChoice_2
      Begin Routine:
        # don't highlight anything initially
        #
        sickHighlight_2.setOpacity(0)
        notsickHighlight_2.setOpacity(0)
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
      Each Frame:
        # highlight subject's response
        #
        if responseKey_2.keys:
            if responseKey_2.keys == 'left': # sick
                sickHighlight_2.opacity = 1
                notsickHighlight_2.opacity = 0
            elif responseKey_2.keys == 'right': # not sick
                sickHighlight_2.opacity = 0
                notsickHighlight_2.opacity = 1
            else:
                assert False, 'Can only have one response, left or right'
        # hack to re-render the text with new opacity
        sickHighlight_2.setText(sickHighlight_2.text)
        notsickHighlight_2.setText(notsickHighlight_2.text)
    CodeComponent jitterCode_2
      Begin Routine:
        jitterTime = random() * 2
    CodeComponent timeLoggingCode_2
      Begin Routine:
        trials.addData('trialStartWallTime', time.ctime())
      End Routine:
        trials.addData('trialEndWallTime', time.ctime())
  Routine waitForTrigger
    CodeComponent waitForTriggerCode
      Begin Experiment:
        fmriClock = core.Clock() # clock for syncing with fMRI scanner
        # definitely log it!

        #trigger = 'parallel'
        trigger = 'usb'
        if trigger == 'parallel':
            from psychopy import parallel
        elif trigger == 'usb':
            from psychopy.hardware.emulator import launchScan

            # settings for launchScan:
            MR_settings = {
                'TR': 2.5, # duration (sec) per volume
                'volumes': 141, # number of whole-brain 3D volumes / frames
                'sync': 'equal', # character to use as the sync timing event; assumed to come at start of a volume
                'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
                }
      Begin Routine:
        if expInfo['mriMode'] != 'Off': # of 'scan' !
            if trigger == 'usb':
                vol = launchScan(win, MR_settings,
                      globalClock=fmriClock, # <-- how you know the time!
                      mode=expInfo['mriMode']) # <-- mode passed in
            elif trigger == 'parallel':
                parallel.setPortAddress(0x378)
                pin = 10; wait_msg = "Waiting for scanner..."
                pinStatus = parallel.readPin(pin)
                waitMsgStim = visual.TextStim(win, color='DarkGray', text=wait_msg)
                waitMsgStim.draw()
                win.flip()
                while True:
                    if pinStatus != parallel.readPin(pin) or len(event.getKeys('esc')):
                       break
                       # start exp when pin values change
                globalClock.reset()
                logging.defaultClock.reset()
                logging.exp('parallel trigger: start of scan')
                win.flip()  # blank the screen on first sync pulse received

        expInfo['triggerWallTime'] = time.ctime()
        core.wait(1)
      End Routine:
        routineTimer.reset()
  Routine test
  Routine waitForFinish
    CodeComponent finishCode
      Begin Experiment:
        EXP_DURATION = 352.5
      End Routine:
        logging.exp("Experiment Finished")
      End Experiment:
        #win.saveMovieFrames('thumb.png')
      Each Frame:
        if logging.defaultClock.getTime() > EXP_DURATION:
            continueRoutine = False
            finishText.status = FINISHED
            finishText.setAutoDraw(False)
    TextComponent finishText
      color = black
      text = Please wait for scanner to finish...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine instr
  Routine waitForTrigger
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = runs.xlsx
    loopType = fullRandom
    nReps = 1
    Selected rows = range(1,10)
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    conditions:
      [{u'restaurantNames': u'Okay here\'s how this works. Each row is a different run -- a list of restaurant names + the prefix of the filenames of its corresponding foods. The list of restaurant names should be comma-separated and should contain exactly 3 restaurants (no unicode characters please -- stick to ASCII). For each food prefix, there should be 3 corresponding files in the \'foods\' directory in the format "[food prefix][cueId].png". For example, for the prefix "mexican_food", there should be files "mexican_food0.png", "mexican_food1.png" and "mexican_food2.png".  The third column is ran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,
      {u'restaurantNames': u"Molina's Cantina,Restaurante Arroyo,El Coyote Cafe", u'foodFilesPrefix': u'mexican_food', u'contextRole': u'irrelevant'},
      {u'restaurantNames': u'Le Parisien,Chez Toinette,Au Petit Sud Ouest', u'foodFilesPrefix': u'french_food', u'contextRole': u'modulatory'},
      {u'restaurantNames': u"Lau's Dim Sum Bar,Shanghai Dumpling King,Happy Lamb Hot Pot", u'foodFilesPrefix': u'chinese_food', u'contextRole': u'additive'}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
    Routine new_run
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $contextRole + '.xlsx'
      loopType = fullRandom
      nReps = 1
      Selected rows = range(1,5)
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      Routine trial
    LoopTerminator trials
    LoopInitiator test_trials loopType="TrialHandler"
      conditionsFile = $contextRole + '.xlsx'
      loopType = fullRandom
      nReps = 1
      Selected rows = range(6,10)
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      Routine test_2
    LoopTerminator test_trials
  LoopTerminator runs
  Routine waitForFinish
